# Saved Gotran model

#parameters(Ca_jct1 = ScalarParam(0.0001, unit="mM"))

parameters("Cell",
            stim_start = ScalarParam(100, unit="ms"),
            #stim_period = ScalarParam(1000.0, unit="ms"),
	    stim_period = ScalarParam(1000.0, unit="ms"),
            stim_duration = ScalarParam(5, unit="ms"),
	    stim_amplitude = ScalarParam(0.0005, unit="uA*uF**-1"))
            #stim_amplitude = ScalarParam(0.0001, unit="uA*uF**-1"))

states("Cell",
       V = ScalarParam(-8.556885e1, unit="mV"),
       Ca_jct1 = ScalarParam(0.0001, unit="mM"))

states("Cytosolic",
       CaM_CN = ScalarParam(3.0e-6, unit='mM'),
       Ca_CaM = ScalarParam(2.911916e-4, unit='mM'),
       Ca_NFAT_Cytosol_active = ScalarParam(1.7e-09, unit='mM'),    # Cooling NFATN_c 
       Ca_NFAT_Cytosol_inactive = ScalarParam(9.83e-07, unit='mM'), # Cooling NFATp_c
       Ca_NFAT_Nucleus_active = ScalarParam(5.09e-07, unit='mM'),   # Cooling NFATN_n
       Ca_NFAT_Nucleus_inactive = ScalarParam(2.76e-07, unit='mM')) # Cooling NFATp_n

parameters("Cytosolic",
           Bmax_CN = ScalarParam(0.0109, unit='mM'),
           Bmax_CaM = ScalarParam(0.024, unit='mM'),
           CN_total = ScalarParam(1.0e-3, unit='mM'),   # Cooling N_tot (total CN) 
           CaM_total = ScalarParam(6.0e-3, unit='mM'), # Cooling M (given concentration of CaM)
           Volume_adjust = ScalarParam(50.0), # Cooling Ccn
           kD_CN_CaM = ScalarParam(1.76e-3, unit='mM'), # Cooling K_d1 (CN_Cam dissociation constant)
           kM_CaM = ScalarParam(5.35e-4, unit='mM'),   # Cooling K_mN (half-maximal activation concentration of Ca for CaM activation for a given concentration of CN)
           koff_CN = ScalarParam(1.2e-1, unit='ms**-1'),
           koff_CaM = ScalarParam(2.38e-1, unit='ms**-1'),
           koff_NFAT_Cytosol = ScalarParam(1.93e-5, unit='ms**-1'),        # Cooling k_r1
           koff_NFAT_Nucleus = ScalarParam(4.71e-2, unit='mM**-1*ms**-1'),   # Cooling k_r3
           kon_CN = ScalarParam(46, unit='mM**-1*ms**-1'),         
           kon_CaM = ScalarParam(34, unit='mM**-1*ms**-1'),          
           kon_NFAT_Cytosol = ScalarParam(7.69e-3, unit='mM**-1*ms**-1'),   # Cooling k_f1
           kon_NFAT_Cytosol_Nucleus = ScalarParam(1.44e-6, unit='ms**-1'), # Cooling k_f2
           kon_NFAT_Nucleus = ScalarParam(3.62e-7, unit='ms**-1'),         # Cooling k_f3
           kon_NFAT_Nucleus_Cytosol = ScalarParam(4.45e-7, unit='ms**-1'), # Cooling k_f4
           n = ScalarParam(2.92)) # Cooling CN activation Hill coefficient 

expressions("Cytosolic")
dCa_CaM_dt = Ca_jct1 * kon_CaM * (Bmax_CaM - Ca_CaM) - koff_CaM * Ca_CaM
dCaM_CN_dt = Ca_CaM * kon_CN * (Bmax_CN - CaM_CN) - koff_CN * CaM_CN
fraction_CN = (Ca_jct1**n) / ((Ca_jct1**n) + ((kM_CaM**n) * (1 + (kD_CN_CaM / CaM_total))))  # Cooling act_N (fraction of activated calcineurin)
CN_active = CN_total * fraction_CN  # Cooling N_active (amount of activated CN)
NFAT_Cytosol_flux = kon_NFAT_Cytosol * Ca_NFAT_Cytosol_inactive * CN_total * fraction_CN - koff_NFAT_Cytosol * Ca_NFAT_Cytosol_active * (1 - fraction_CN)  # Cooling J_1
NFAT_Cytosol_to_Nucleus_flux = Ca_NFAT_Cytosol_active * kon_NFAT_Cytosol_Nucleus                                                                           # Cooling J_2
NFAT_Nucleus_flux = kon_NFAT_Nucleus * Ca_NFAT_Nucleus_active * (1 - fraction_CN) - koff_NFAT_Nucleus * Ca_NFAT_Nucleus_inactive * CN_total * fraction_CN  # Cooling J_3
NFAT_Nucleus_to_Cytosol_flux = Ca_NFAT_Nucleus_inactive * kon_NFAT_Nucleus_Cytosol                                                                         # Cooling J_4
dCa_NFAT_Cytosol_inactive_dt = NFAT_Nucleus_to_Cytosol_flux / Volume_adjust - NFAT_Cytosol_flux # Cooling dNFATp_c/dt
dCa_NFAT_Cytosol_active_dt   = NFAT_Cytosol_flux - NFAT_Cytosol_to_Nucleus_flux                 # Cooling dNFATN_c/dt
dCa_NFAT_Nucleus_active_dt   = NFAT_Cytosol_to_Nucleus_flux * Volume_adjust - NFAT_Nucleus_flux # Cooling dNFATN_n/dt
dCa_NFAT_Nucleus_inactive_dt = NFAT_Nucleus_flux - NFAT_Nucleus_to_Cytosol_flux                 # Cooling dNFATp_c/dt

expressions("Cell")
dV_dt = 0
z = time/stim_period - floor(time/stim_period)
C = stim_amplitude * exp(-10 * z) # - 1.0e3
X = -2.0 * (Ca_jct1 - 0.0001) * exp(0.2 * V/25.7)
dCa_jct1_dt = C + X




