### This model is to test P2X4 pump against literature
#
# Contribution of Calcium Ions to P2X Channel Responses. Egan and Khakh


parameters("Cell",
	    stim_start = ScalarParam(100, unit="ms"),
            stim_period = ScalarParam(2000.0, unit="ms"),
            stim_duration = ScalarParam(5, unit="ms"),
            stim_amplitude = ScalarParam(0.00065, unit="uA*uF**-1"))
	  
states("Cell",
       V = ScalarParam(-8.556885e1, unit="mV"),
       P2X = ScalarParam(9.25e-3, unit="mM"), # BDS 6/14/2017 made up number, need to find literature value
       #BDNF = ScalarParam(2.25e-5, unit="mM"), # BDS 6/14/2017 made up number, need to find literature value
       logpATP = ScalarParam(-6, unit="logM"))

expressions("Cell")
i_Stim = Conditional(And(Ge(time - floor(time/stim_period)*stim_period, stim_start), Le(time - floor(time/stim_period)*stim_period, stim_start + stim_duration), ), -stim_amplitude, 0) # uA*uF**-1
dV_dt = 0 # need to leave this as a state, since the runner tries to record these data
#dlogpATP_dt = 0.010 *  (sin(3.141 * time/stim_period))**3  # Oscilation between -6 and -1.75
#dlogpATP_dt = 0.0075 *  (sin(3.141 * time/stim_period))**3  # Oscilation between -6 and -2.4
dlogpATP_dt = 0.007 *  (sin(3.141 * (time-2000)/stim_period))  # Oscilation between -6 and -3
#dlogpATP_dt = 0.003 *  (sin(3.141 * time/stim_period))**3  # Oscilation between -6 and -4.75
#dlogpATP_dt = 0.006 *  (sin(3.141 * time/stim_period))**3  # Oscilation between -6 and -3.5
#dlogpATP_dt = 0.0  # Keeps ATP at zero
cATP = 10 ** (logpATP)
modulo = (time/stim_period) - floor(time/stim_period) 
#i_P2X = Conditional(Ge(cATP, 6.3e-4),  ((stim_amplitude * exp(-2.0 * modulo)) * (1.0 - (1 / (1 + exp(-(modulo - 0.60 ) * 60.0))))) ,0)
KDATP = 1  # [mM] 
hillcoef = 1/(1 + (KDATP/cATP))
i_P2X = -(stim_amplitude * exp(-2.0 * modulo)) * (1.0 - (1 / (1 + exp(-(modulo - 0.60 ) * 60.0))))
#i_P2X = (stim_amplitude * exp(-2.0 * modulo)) * (1.0 - (1 / (1 + exp(-(modulo - 0.60 ) * 60.0))))

#i_P2X = Conditional(Ge(cATP, 6.3e-4),  ((stim_amplitude * exp(-1.2 * modulo)) * (1.0 - (1 / (1 + exp(-(modulo - 0.58 ) * 30))))) ,0)
#i_P2X = Conditional(Ge(cATP, 6.3e-4), -gCaP2X ,0)
#dP2X_dt = kon_P2X * Ca_NFAT_Nucleus_active * (Bmax_P2X - P2X) - koff_P2X * P2X
#dP2X_dt = Conditional(Ge(BDNF, 1.0), kon_P2X * BDNF * (Bmax_P2X - P2X) - koff_P2X * P2X, 0)
#dP2X_dt = kon_P2X * BDNF * (Bmax_P2X - P2X) - koff_P2X * P2X * 2
dP2X_dt = 0
#i_P2X = Conditional(Ge(cATP, 6.3e-4),  (stim_amplitude * exp(-1.2 * modulo)) * (1 - 1 / (1 + exp(-(modulo - 0.7) * 30.0))) ,0)
#i_P2X = Conditional(Ge(cATP, 6.3e-4),0.0009 -(stim_amplitude * exp(-0.8 * (modulo-0.9))) * (1 - 1 / (1 + exp(-(modulo ) * 11.0))) ,0)
#i_P2X = Conditional(Ge(cATP, 6.3e-4), -gCaP2X ,0)


