####  03/16/2018 Update ########################################################
# Original Python code was written by Ben Chun                                 #
################################################################################

###################################################################################
## Model Specification 							  #########
####### 1. Cell type: HEK293T                                       ###############
####### 2. rP2X4, rP2X7						    ###############
####### 3. 13-state model, 12 state model			    ###############
###################################################################################

parameters("stimulation",
    #stim_start = ScalarParam(10, unit="s"),
    stim_period = ScalarParam(40e3, unit="ms"), # stim_duration = stim_period/2
    pre_rest = ScalarParam(0, unit="ms"),
    stim_space = ScalarParam(160e3, unit="ms"), # time duration between end of pulse and beginning of pulse
    size = ScalarParam(1), # default = 1
    stim_duration = ScalarParam(0), # dummy parameter
    stim_amplitude = ScalarParam(1000, unit="uM"),
    stim_pulse = ScalarParam(1) # 1 = pulse is on, 0 = pulse is off 
    )

parameters("MSMp2x4",
    k1_ptxf = ScalarParam(0.2e-3, unit="ms**-1"),
    k2_ptxf = ScalarParam(8000000e-3, unit="(M*ms)**-1"),
    k3_ptxf = ScalarParam(0.1e-3, unit="ms**-1"),
    k4_ptxf = ScalarParam(900000000e-3, unit="(M*ms)**-1"),
    k5_ptxf = ScalarParam(0.03e-3, unit="ms**-1"),
    k6_ptxf = ScalarParam(9000000e-3, unit="(M*ms)**-1"),
    L1_ptxf = ScalarParam(0.01e-3, unit="ms**-1"),
    L2_ptxf = ScalarParam(0.04e-3, unit="ms**-1"),
    L3_ptxf = ScalarParam(0.5e-3, unit="ms**-1"),
    H1_ptxf = ScalarParam(0.013e-3, unit="ms**-1"),
    H2_ptxf = ScalarParam(0.1e-3, unit="ms**-1"),
    H3_ptxf = ScalarParam(1.56e-3, unit="ms**-1"),
    H4_ptxf = ScalarParam(0.005e-3, unit="ms**-1"),
    F_ptxf = ScalarParam(1),
    G_ptxf = ScalarParam(1)
    )

parameters("MSMp2x7",
    k1_ptxs = ScalarParam(0.0394e-3, unit="ms**-1"),
    k2_ptxs = ScalarParam(2198.52e-3, unit="(M*ms)**-1"),
    k3_ptxs = ScalarParam(0.495e-3, unit="ms**-1"),
    k4_ptxs = ScalarParam(2155.31e-3, unit="(M*ms)**-1"),
    k5_ptxs = ScalarParam(0.57e-3, unit="ms**-1"),
    k6_ptxs = ScalarParam(96.997e-3, unit="(M*ms)**-1"),
    L1_ptxs = ScalarParam(0.491e-3, unit="ms**-1"),
    L2_ptxs = ScalarParam(0.170e-3, unit="ms**-1"),
    #L3_ptxs = ScalarParam(0.051, unit="s**-1"),
    #H1_ptxs = ScalarParam(0.001, unit="s**-1"),
    #H2_ptxs = ScalarParam(0.00081, unit="s**-1"),
    H3_ptxs = ScalarParam(0.0294e-3, unit="ms**-1")
    #H4_ptxs = ScalarParam(0, unit="s**-1")
    )

parameters("Ip2x4",
    G12_ptxf = ScalarParam(3e-11, unit="C*(ms*V)**-1"),
    G34_ptxf = ScalarParam(8e-11, unit="C*(ms*V)**-1"),
    V_ptxf = ScalarParam(-0.023, unit="V"),  # 60 mV was used in MSM
    E12_ptxf = ScalarParam(0, unit="V"),
    E34_ptxf = ScalarParam(0, unit="V"),
    CaA_ptxf = ScalarParam(0.0824) # fraction of current contributed by Calcium transport
    )

parameters("Ip2x7",
    G12_ptxs = ScalarParam(1.5e-11, unit="C*(ms*V)**-1"),
    G34_ptxs = ScalarParam(4.5e-11, unit="C*(ms*V)**-1"),
    V_ptxs = ScalarParam(-0.023, unit="V"),  # 60 mV was used in MSM
    E12_ptxs = ScalarParam(0, unit="V"),
    E34_ptxs = ScalarParam(0, unit="V"),
    CaA_ptxs = ScalarParam(0.1) # fraction of current contributed by Calcium transport
    )

parameters("Jp2x",
    F = ScalarParam(96485.33289, unit="C*mol**-1"),
    rHEK = ScalarParam(6.5e-6, unit="m"),
    rMiG = ScalarParam(2.6e-6, unit="m"),
    expF_ptxf = ScalarParam(0.25),
    expF_ptxs = ScalarParam(0.55),
    SAptxf = ScalarParam(1),
    SAptxs = ScalarParam(1),
    SAca = ScalarParam(1)
    )

parameters("Buffer_cyto",
    BmFura = ScalarParam(0.025e3, unit="uM"), # [M] -> Shannon-Bers: Fluo-3 (Cytoplasm)
    KonFura = ScalarParam(15e-2, unit="(uM*ms)**-1"),    # [1/(M*s)] -> Chemical Calcium Indicators: Fura-2 (Cytoplasm)
    KoffFura = ScalarParam(23e-3, unit="ms**-1"),     # [1/s] -> Chemical Calcium Indicators: Fura-2 (Cytoplasm)
    # Constants for CaM-CN calculation: taken from the work of Bazzazi et al. by Rachel
    kba  = ScalarParam(10e-3, unit="ms**-1"),        # [s-1]
    kab = ScalarParam(1e-2, unit="uM**-2*ms**-1"),       # [M-2*s-1]
    kcb = ScalarParam(500e-3, unit="ms**-1"),        # [s-1]
    kbc = ScalarParam(500e-2, unit="uM**-2*ms**-1"),     # [M-2*s-1]
    koffA = ScalarParam(1e-3, unit="ms**-1"),      # [s-1]
    konA = ScalarParam(1e1, unit="uM**-1*ms**-1"),      # [M-1*s-1]
    konB = ScalarParam(2e-3, unit="uM**-2*ms**-1"),      # [M-2*s-1]
    koffB = ScalarParam(1e-3, unit="ms**-1"),        # [s-1]
    CNt = ScalarParam(2, unit="uM"),       #[uM]
    CaMt = ScalarParam(3, unit="uM"),       #[uM]
    SAcn = ScalarParam(1),
    SAcm = ScalarParam(1)
    )

parameters("Buffer_ER",
    BmCals = ScalarParam(0.14e3, unit="uM"),   # [M] -> Shannon-Bers: Calsequestrin (ER)
    KonCals = ScalarParam(10e-2, unit="(uM*ms)**-1"),    # [1/(M*s)] -> Shannon-Bers: Calsequestrin (ER)
    KoffCals = ScalarParam(65000e-3, unit="ms**-1"),   # [1/s] -> Shannon-Bers: Calsequestrin (ER))
    rV_ER = ScalarParam(0.0875)
    )

parameters("NCX",
    R = ScalarParam(8.314, unit="J*(mol*K)**-1"),          # [J/mol-k]
    T_NCX = ScalarParam(310, unit="K"),                    # K
    VmaxNCX = ScalarParam(0.75, unit="A*F**-1"),            # [A/F] modifeid from 9
    KmCai_NCX = ScalarParam(3.59, unit="uM"),            # [M]
    KmCao_NCX = ScalarParam(1.3e3, unit="uM"),             # [M]
    KmNai_NCX = ScalarParam(12.29e3, unit="uM"),           # [M]
    KmNao_NCX = ScalarParam(87.5e3, unit="uM"),            # [M]
    ksat_NCX = ScalarParam(0.27),
    eta_NCX = ScalarParam(0.55),
    KdAct_NCX = ScalarParam(0.256, unit="uM"),      # [uM]
    HNa_NCX = ScalarParam(3.25),
    Q10NCX = ScalarParam(1.57),
    uniC_NCX = ScalarParam(1e-2, unit="F*m**-2"),         # [F/m**2] unit conductance
    Vncx = ScalarParam(-0.023, unit="V"),       # [V] -> the holding potential (used in NCX calculation as well)
    Fncx = ScalarParam(96485.33289, unit="C/mol"), # Faraday constant in [C/mol])
    nHillncx = ScalarParam(3.25),
    Cm = ScalarParam(12e-9, unit="F"),
    ## Fixted substance concentrations
    Nae_NCX = ScalarParam(145e3, unit="uM"),       # [M] Exocytosolic Na free concentration
    Nai_NCX = ScalarParam(8e3, unit="uM"),         # [M] Cytosolic Na free concentration -> Neuroglia p.190 Fig 16.4 the range from 8-20 mM
    Cae_NCX = ScalarParam(2e3, unit="uM"),         # [M] Exocytosolic Ca free concentration
    SAnancx = ScalarParam(1)
    )

parameters("SERCA_ER",
    Q10ERCa = ScalarParam(2.6),
    VmaxSERCA = ScalarParam(5.3114, unit="uM*ms**-1"),       # [M/s] taken from script but their literature reported differently: This may need to be adjusted
    Kmf_SERCA = ScalarParam(0.246, unit="uM"),        # [uM]
    Kmr_SERCA = ScalarParam(1.7e3, unit="uM"),          # [mM]
    H_SERCA = ScalarParam(1.787),
    T_SERCA = ScalarParam(310),                # K
    SAserca = ScalarParam(1)
    )

parameters("p-p38",
    kb_pp38 = ScalarParam(0.0018518519e-3, unit="ms**-1"),
    kf_pp38 = ScalarParam(208.33333333e-9, unit="(uM*ms)**-1"),
    pp38t = ScalarParam(50, unit="molecule"),
    SApp38 = ScalarParam(1)
    )

parameters("NFAT",
    kf1_NFAT = ScalarParam(5.2e-10, unit="(nM*ms)**-1"),    # [1/(nMs)]  7.69e-6
    kr1_NFAT = ScalarParam(1.93e-3, unit="ms**-1"),   # [1/s] 1.93e-2
    kf2_NFAT = ScalarParam(1.44e-3, unit="ms**-1"),   # [1/s] 1.44e-3
    kf3_NFAT = ScalarParam(3.62e-3, unit="ms**-1"),   # [1/s] 3.62e-4
    kr3_NFAT = ScalarParam(8.71e-4, unit="(nM*ms)**-1"),   # [1/(nMs)] 4.71e-3
    kf4_NFAT = ScalarParam(4.45e-3, unit="ms**-1"),   # [1/s] 4.45e-4
    KmN_NFAT = ScalarParam(535, unit="nM"),        # [nM]
    n_NFAT = ScalarParam(2.92),
    Ccn_NFAT = ScalarParam(1),          # Volume ratio of Cytosol to Nucleus
    NFATt = ScalarParam(1.1, unit="nM"),
    SAnfat = ScalarParam(1)
    )


parameters("TNFa",
    ktrnscrpt_TNF = ScalarParam(277.78e-9, unit="ms**-1"),   # 1/3600            # [1/s]: k for transcription of mRNA from DNA per molecule
    ktrnsl_TNF = ScalarParam(27.7778e-6, unit="ms**-1"),     # 100/3600          # [1/s]: k for translation of TNFa from mRNA per molecule
    kdegTNF_TNF = ScalarParam(13.8889e-6, unit="ms**-1"),    # 50/3600           # [1/s]: the rate of degradation of TNFa per molecule
    kdegRNA_TNF = ScalarParam(138.88889e-9, unit="ms**-1"),   # 0.5/3600          # [1/s]: the rate of degradation of mRNA per molecule
    kgeneexpf_TNF = ScalarParam(111.11e-9, unit="(molecule*ms)**-1"),   # 1/(3600*2.5)      # [1/(molecule-s)]: Gene expression
    kgeneexpr_TNF = ScalarParam(277.78e-9, unit="ms**-1"),   # 1/3600            # [1/s]:
    #kfpp38_TNF = ScalarParam(555.5556e-6, unit="(M*s)**-1"),    # 2/3600            # 2 count per 3600 seconds
    ### Hill equation related constants for activation of DNA dynamics/TNFa release
    kmaxexo_TNF = ScalarParam(2.777778e-6, unit="(uM*ms)**-1"),    # 5/1800             # [1/(M-s)]: R max of exocytosis of TNFa 150 15 15 10 1
    nCaleak_TNF = ScalarParam(3),
    #nNFAT1_TNF = ScalarParam(80),             # Hill coefficient of NFAT related to transcription activation
    #IC50NFAT1_TNF = ScalarParam(0.5, unit="nM"),         # [nM] Transcription related
    IC50Caleak_TNF = ScalarParam(0.115, unit="uM"),         # [uM]: TNFa leaks related 4e-7 4e-7 1e-7 1e-7 1e-7
    IC50pp38_TNF = ScalarParam(0.7, unit="molecule"),
    npp38_TNF = ScalarParam(3)
    )

parameters("Leakage",
    CaExt = ScalarParam(2e3, unit="uM"),      # External Ca concentration in [M]
    DExtoCy = ScalarParam(0.42e-3, unit="ms**-1"),    # Diffusion constant of Ca from External to Cytosol - Fitted
    DERtoCy = ScalarParam(0.00000, unit="s**-1")     # Diffusion constant of Ca from ER to Cytosol
    )

states("MSMp2x4",
    D1_ptxf = 0.0,
    D2_ptxf = 0.0,
    D3_ptxf = 0.0,
    D4_ptxf = 0.0,
    C1_ptxf = 1.0,
    C2_ptxf = 0.0,
    C3_ptxf = 0.0,
    C4_ptxf = 0.0,
    Q1_ptxf = 0.0,
    Q2_ptxf = 0.0,
    Q3_ptxf = 0.0,
    Q4_ptxf = 0.0,
    N_ptxf = 0.0
    )

states("MSMp2x7",
    D1_ptxs = 0.0,
    D2_ptxs = 0.0,
    D3_ptxs = 0.0,
    D4_ptxs = 0.0,
    C1_ptxs = 1.0,
    C2_ptxs = 0.0,
    C3_ptxs = 0.0,
    C4_ptxs = 0.0,
    Q1_ptxs = 0.0,
    Q2_ptxs = 0.0,
    Q3_ptxs = 0.0,
    Q4_ptxs = 0.0,
    )

states("Ca_cyto",
    Cai = ScalarParam(0.1, unit="uM"),        # M
    Captxs = ScalarParam(0, unit="uM"),
    Captxf = ScalarParam(0, unit="uM")
    )

states("Buffer_cyto",
    CaF = ScalarParam(9.86, unit="uM"),         # M
    Ca2_CaM = ScalarParam(0.0234, unit="uM"),                   # M
    Ca4_CaM = ScalarParam(0.00234, unit="uM"),                   # M
    Ca4_CN = ScalarParam(0.02686, unit="uM"),                    # M
    CaMCN = ScalarParam(0.6289, unit="uM")                       # M
    )

states("Ca_ER",
    CaER = ScalarParam(690, unit="uM")       # M
    )

states("Buffer_ER",
    CaS = ScalarParam(824, unit="uM")        # M
    )

states("SERCA_ER",
    SERCA = 0
    )

states("NFAT",
    NFATpc = ScalarParam(1.09, unit="nM"),        # nM 0.994682667758
    NFATpn = ScalarParam(4.176e-5, unit="nM"),       # nM 0.0463772043925
    #NFATNc = ScalarParam(0.000112322167638, unit="nM"),     # nM 0.000112322167638
    NFATNn = ScalarParam(0.00929, unit="nM")        # nM 0.0581439005689
    )

states("NCX",
    NCX = 0
    )

states("p-p38",
    pp38 = ScalarParam(0.5561, unit="molecule")                      # molecule
    #p38 = ScalarParam(49.47, unit="molecule")                        # molecule
    )

states("TNFa",
    DNA_TNF = ScalarParam(50, unit="molecule"),                  # molecule
    DNATNF = ScalarParam(0, unit="molecule"),                    # molecule
    mRNA_TNF = ScalarParam(0, unit="molecule"),                  # molecule
    TNFa = ScalarParam(100, unit="molecule"),                    # molecule
    TNFa_release = ScalarParam(0, unit="molecule")               # molecule
    )

states("Leakage",
    CaExtoCy = ScalarParam(0, unit="uM"), # in [M]
    CaERtoCy = ScalarParam(0, unit="uM")  # in [M]
    )

states("Cell",
    V = 0,
    logATP = -6
    )

expressions("Cell")
dV_dt = 0
stim_start = stim_period/2
stim_period2 = stim_period/4
ntime = Conditional(Le((time-pre_rest),0),0,(time-pre_rest))
STC = Conditional(Le((time-pre_rest),0),0,1)
dlogATP_dt = 1*((sin(1*3.141*(ntime-stim_period2)/stim_period2))**1)*STC
#dlogATP_dt = 1*(sin(1*3.141*(ntime-stim_period2)/stim_period2))
ATP = 10**(logATP)*stim_amplitude
ATP71 = Conditional(Le(stim_amplitude,4.118),stim_amplitude,4.11863563*exp(stim_amplitude*0.00479906))
stim_amplitude_ptxs = ATP71*10**-6
stim_amplitude_ptxf = stim_amplitude*1e-6

ATP41 = Conditional(Le(ntime,0.33*stim_start),0,10**(logATP)*stim_amplitude)
ATP72 = Conditional(Le(ntime,0.33*stim_start),0,ATP71*10**(logATP))

stim_period3 = stim_period*size
total_space = stim_space + stim_period
rest_start = pre_rest + stim_period/4

ATPptxf1 = Conditional(And(Ge(ntime - floor(ntime/(stim_period3))*(stim_period3), stim_start), Le(ntime - floor(ntime/(stim_period3))*(stim_period3), stim_period3), ), stim_amplitude_ptxf, ATP41)
ATPptxf2 = Conditional(And(Ge(time,(rest_start+size*stim_period+0*total_space)),Le(time,(rest_start+1*total_space)),),0,ATPptxf1)
ATPptxf3 = Conditional(And(Ge(time,(rest_start+size*stim_period+1*total_space)),Le(time,(rest_start+2*total_space)),),0,ATPptxf2)
ATPptxf4 = Conditional(And(Ge(time,(rest_start+size*stim_period+2*total_space)),Le(time,(rest_start+3*total_space)),),0,ATPptxf3)
ATPptxf5 = Conditional(And(Ge(time,(rest_start+size*stim_period+3*total_space)),Le(time,(rest_start+4*total_space)),),0,ATPptxf4)
ATPptxf6 = Conditional(And(Ge(time,(rest_start+size*stim_period+4*total_space)),Le(time,(rest_start+5*total_space)),),0,ATPptxf5)
ATPptxf7 = Conditional(And(Ge(time,(rest_start+size*stim_period+5*total_space)),Le(time,(rest_start+6*total_space)),),0,ATPptxf6)
ATPptxf8 = Conditional(And(Ge(time,(rest_start+size*stim_period+6*total_space)),Le(time,(rest_start+7*total_space)),),0,ATPptxf7)
ATPptxf9 = Conditional(And(Ge(time,(rest_start+size*stim_period+7*total_space)),Le(time,(rest_start+8*total_space)),),0,ATPptxf8)
ATPptxf10 = Conditional(And(Ge(time,(rest_start+size*stim_period+8*total_space)),Le(time,(rest_start+9*total_space)),),0,ATPptxf9)
ATPptxf11 = Conditional(And(Ge(time,(rest_start+size*stim_period+9*total_space)),Le(time,(rest_start+10*total_space)),),0,ATPptxf10)
ATPptxf12 = Conditional(And(Ge(time,(rest_start+size*stim_period+10*total_space)),Le(time,(rest_start+11*total_space)),),0,ATPptxf11)
ATPptxf13 = Conditional(And(Ge(time,(rest_start+size*stim_period+11*total_space)),Le(time,(rest_start+12*total_space)),),0,ATPptxf12)
ATPptxf14 = Conditional(And(Ge(time,(rest_start+size*stim_period+12*total_space)),Le(time,(rest_start+13*total_space)),),0,ATPptxf13)
ATPptxf15 = Conditional(And(Ge(time,(rest_start+size*stim_period+13*total_space)),Le(time,(rest_start+14*total_space)),),0,ATPptxf14)
ATPptxf16 = Conditional(And(Ge(time,(rest_start+size*stim_period+14*total_space)),Le(time,(rest_start+15*total_space)),),0,ATPptxf15)
ATPptxf17 = Conditional(And(Ge(time,(rest_start+size*stim_period+15*total_space)),Le(time,(rest_start+16*total_space)),),0,ATPptxf16)
ATPptxf18 = Conditional(And(Ge(time,(rest_start+size*stim_period+16*total_space)),Le(time,(rest_start+17*total_space)),),0,ATPptxf17)
ATPptxf19 = Conditional(And(Ge(time,(rest_start+size*stim_period+17*total_space)),Le(time,(rest_start+18*total_space)),),0,ATPptxf18)
ATPptxf20 = Conditional(And(Ge(time,(rest_start+size*stim_period+18*total_space)),Le(time,(rest_start+19*total_space)),),0,ATPptxf19)

ATPptxf21 = Conditional(And(Ge(time,(rest_start+size*stim_period+19*total_space)),Le(time,(rest_start+20*total_space)),),0,ATPptxf20)
ATPptxf22 = Conditional(And(Ge(time,(rest_start+size*stim_period+20*total_space)),Le(time,(rest_start+21*total_space)),),0,ATPptxf21)
ATPptxf23 = Conditional(And(Ge(time,(rest_start+size*stim_period+21*total_space)),Le(time,(rest_start+22*total_space)),),0,ATPptxf22)
ATPptxf24 = Conditional(And(Ge(time,(rest_start+size*stim_period+22*total_space)),Le(time,(rest_start+23*total_space)),),0,ATPptxf23)
ATPptxf25 = Conditional(And(Ge(time,(rest_start+size*stim_period+23*total_space)),Le(time,(rest_start+24*total_space)),),0,ATPptxf24)
ATPptxf26 = Conditional(And(Ge(time,(rest_start+size*stim_period+24*total_space)),Le(time,(rest_start+25*total_space)),),0,ATPptxf25)
ATPptxf27 = Conditional(And(Ge(time,(rest_start+size*stim_period+25*total_space)),Le(time,(rest_start+26*total_space)),),0,ATPptxf26)
ATPptxf28 = Conditional(And(Ge(time,(rest_start+size*stim_period+26*total_space)),Le(time,(rest_start+27*total_space)),),0,ATPptxf27)
ATPptxf29 = Conditional(And(Ge(time,(rest_start+size*stim_period+27*total_space)),Le(time,(rest_start+28*total_space)),),0,ATPptxf28)
ATPptxf30 = Conditional(And(Ge(time,(rest_start+size*stim_period+28*total_space)),Le(time,(rest_start+29*total_space)),),0,ATPptxf29)
ATPptxf31 = Conditional(And(Ge(time,(rest_start+size*stim_period+29*total_space)),Le(time,(rest_start+30*total_space)),),0,ATPptxf30)
ATPptxf32 = Conditional(And(Ge(time,(rest_start+size*stim_period+30*total_space)),Le(time,(rest_start+31*total_space)),),0,ATPptxf31)
ATPptxf33 = Conditional(And(Ge(time,(rest_start+size*stim_period+31*total_space)),Le(time,(rest_start+32*total_space)),),0,ATPptxf32)
ATPptxf34 = Conditional(And(Ge(time,(rest_start+size*stim_period+32*total_space)),Le(time,(rest_start+33*total_space)),),0,ATPptxf33)
ATPptxf35 = Conditional(And(Ge(time,(rest_start+size*stim_period+33*total_space)),Le(time,(rest_start+34*total_space)),),0,ATPptxf34)
ATPptxf36 = Conditional(And(Ge(time,(rest_start+size*stim_period+34*total_space)),Le(time,(rest_start+35*total_space)),),0,ATPptxf35)
ATPptxf37 = Conditional(And(Ge(time,(rest_start+size*stim_period+35*total_space)),Le(time,(rest_start+36*total_space)),),0,ATPptxf36)
ATPptxf38 = Conditional(And(Ge(time,(rest_start+size*stim_period+36*total_space)),Le(time,(rest_start+37*total_space)),),0,ATPptxf37)
ATPptxf39 = Conditional(And(Ge(time,(rest_start+size*stim_period+37*total_space)),Le(time,(rest_start+38*total_space)),),0,ATPptxf38)
ATPptxf40 = Conditional(And(Ge(time,(rest_start+size*stim_period+38*total_space)),Le(time,(rest_start+39*total_space)),),0,ATPptxf39)

ATPptxf = Conditional(Eq(stim_pulse,1),ATPptxf40,stim_amplitude_ptxf)

ATPptxs1 = Conditional(And(Ge(ntime - floor(ntime/(stim_period3))*(stim_period3), stim_start), Le(ntime - floor(ntime/(stim_period3))*(stim_period3), stim_period3), ), stim_amplitude_ptxs, ATP72)
ATPptxs2 = Conditional(And(Ge(time,(rest_start+size*stim_period+0*total_space)),Le(time,(rest_start+1*total_space)),),0,ATPptxs1)
ATPptxs3 = Conditional(And(Ge(time,(rest_start+size*stim_period+1*total_space)),Le(time,(rest_start+2*total_space)),),0,ATPptxs2)
ATPptxs4 = Conditional(And(Ge(time,(rest_start+size*stim_period+2*total_space)),Le(time,(rest_start+3*total_space)),),0,ATPptxs3)
ATPptxs5 = Conditional(And(Ge(time,(rest_start+size*stim_period+3*total_space)),Le(time,(rest_start+4*total_space)),),0,ATPptxs4)
ATPptxs6 = Conditional(And(Ge(time,(rest_start+size*stim_period+4*total_space)),Le(time,(rest_start+5*total_space)),),0,ATPptxs5)
ATPptxs7 = Conditional(And(Ge(time,(rest_start+size*stim_period+5*total_space)),Le(time,(rest_start+6*total_space)),),0,ATPptxs6)
ATPptxs8 = Conditional(And(Ge(time,(rest_start+size*stim_period+6*total_space)),Le(time,(rest_start+7*total_space)),),0,ATPptxs7)
ATPptxs9 = Conditional(And(Ge(time,(rest_start+size*stim_period+7*total_space)),Le(time,(rest_start+8*total_space)),),0,ATPptxs8)
ATPptxs10 = Conditional(And(Ge(time,(rest_start+size*stim_period+8*total_space)),Le(time,(rest_start+9*total_space)),),0,ATPptxs9)
ATPptxs11 = Conditional(And(Ge(time,(rest_start+size*stim_period+9*total_space)),Le(time,(rest_start+10*total_space)),),0,ATPptxs10)
ATPptxs12 = Conditional(And(Ge(time,(rest_start+size*stim_period+10*total_space)),Le(time,(rest_start+11*total_space)),),0,ATPptxs11)
ATPptxs13 = Conditional(And(Ge(time,(rest_start+size*stim_period+11*total_space)),Le(time,(rest_start+12*total_space)),),0,ATPptxs12)
ATPptxs14 = Conditional(And(Ge(time,(rest_start+size*stim_period+12*total_space)),Le(time,(rest_start+13*total_space)),),0,ATPptxs13)
ATPptxs15 = Conditional(And(Ge(time,(rest_start+size*stim_period+13*total_space)),Le(time,(rest_start+14*total_space)),),0,ATPptxs14)
ATPptxs16 = Conditional(And(Ge(time,(rest_start+size*stim_period+14*total_space)),Le(time,(rest_start+15*total_space)),),0,ATPptxs15)
ATPptxs17 = Conditional(And(Ge(time,(rest_start+size*stim_period+15*total_space)),Le(time,(rest_start+16*total_space)),),0,ATPptxs16)
ATPptxs18 = Conditional(And(Ge(time,(rest_start+size*stim_period+16*total_space)),Le(time,(rest_start+17*total_space)),),0,ATPptxs17)
ATPptxs19 = Conditional(And(Ge(time,(rest_start+size*stim_period+17*total_space)),Le(time,(rest_start+18*total_space)),),0,ATPptxs18)
ATPptxs20 = Conditional(And(Ge(time,(rest_start+size*stim_period+18*total_space)),Le(time,(rest_start+19*total_space)),),0,ATPptxs19)

ATPptxs21 = Conditional(And(Ge(time,(rest_start+size*stim_period+19*total_space)),Le(time,(rest_start+20*total_space)),),0,ATPptxs20)
ATPptxs22 = Conditional(And(Ge(time,(rest_start+size*stim_period+20*total_space)),Le(time,(rest_start+21*total_space)),),0,ATPptxs21)
ATPptxs23 = Conditional(And(Ge(time,(rest_start+size*stim_period+21*total_space)),Le(time,(rest_start+22*total_space)),),0,ATPptxs22)
ATPptxs24 = Conditional(And(Ge(time,(rest_start+size*stim_period+22*total_space)),Le(time,(rest_start+23*total_space)),),0,ATPptxs23)
ATPptxs25 = Conditional(And(Ge(time,(rest_start+size*stim_period+23*total_space)),Le(time,(rest_start+24*total_space)),),0,ATPptxs24)
ATPptxs26 = Conditional(And(Ge(time,(rest_start+size*stim_period+24*total_space)),Le(time,(rest_start+25*total_space)),),0,ATPptxs25)
ATPptxs27 = Conditional(And(Ge(time,(rest_start+size*stim_period+25*total_space)),Le(time,(rest_start+26*total_space)),),0,ATPptxs26)
ATPptxs28 = Conditional(And(Ge(time,(rest_start+size*stim_period+26*total_space)),Le(time,(rest_start+27*total_space)),),0,ATPptxs27)
ATPptxs29 = Conditional(And(Ge(time,(rest_start+size*stim_period+27*total_space)),Le(time,(rest_start+28*total_space)),),0,ATPptxs28)
ATPptxs30 = Conditional(And(Ge(time,(rest_start+size*stim_period+28*total_space)),Le(time,(rest_start+29*total_space)),),0,ATPptxs29)
ATPptxs31 = Conditional(And(Ge(time,(rest_start+size*stim_period+29*total_space)),Le(time,(rest_start+30*total_space)),),0,ATPptxs30)
ATPptxs32 = Conditional(And(Ge(time,(rest_start+size*stim_period+30*total_space)),Le(time,(rest_start+31*total_space)),),0,ATPptxs31)
ATPptxs33 = Conditional(And(Ge(time,(rest_start+size*stim_period+31*total_space)),Le(time,(rest_start+32*total_space)),),0,ATPptxs32)
ATPptxs34 = Conditional(And(Ge(time,(rest_start+size*stim_period+32*total_space)),Le(time,(rest_start+33*total_space)),),0,ATPptxs33)
ATPptxs35 = Conditional(And(Ge(time,(rest_start+size*stim_period+33*total_space)),Le(time,(rest_start+34*total_space)),),0,ATPptxs34)
ATPptxs36 = Conditional(And(Ge(time,(rest_start+size*stim_period+34*total_space)),Le(time,(rest_start+35*total_space)),),0,ATPptxs35)
ATPptxs37 = Conditional(And(Ge(time,(rest_start+size*stim_period+35*total_space)),Le(time,(rest_start+36*total_space)),),0,ATPptxs36)
ATPptxs38 = Conditional(And(Ge(time,(rest_start+size*stim_period+36*total_space)),Le(time,(rest_start+37*total_space)),),0,ATPptxs37)
ATPptxs39 = Conditional(And(Ge(time,(rest_start+size*stim_period+37*total_space)),Le(time,(rest_start+38*total_space)),),0,ATPptxs38)
ATPptxs40 = Conditional(And(Ge(time,(rest_start+size*stim_period+38*total_space)),Le(time,(rest_start+39*total_space)),),0,ATPptxs39)

ATPptxs = Conditional(Eq(stim_pulse,1),ATPptxs40,stim_amplitude_ptxs)

expressions("MSMp2x4")
dD1_ptxf_dt = k1_ptxf*D2_ptxf - (3*k2_ptxf*ATPptxf + H1_ptxf)*D1_ptxf
dD2_ptxf_dt = 3*k2_ptxf*ATPptxf*D1_ptxf + 2*k3_ptxf*D3_ptxf + H2_ptxf*C2_ptxf - (k1_ptxf + 2*k4_ptxf*ATPptxf)*D2_ptxf
dD3_ptxf_dt = 2*k4_ptxf*ATPptxf*D2_ptxf + 3*k5_ptxf*D4_ptxf + H2_ptxf*Q1_ptxf - (2*k3_ptxf + k6_ptxf*ATPptxf)*D3_ptxf
dD4_ptxf_dt = k6_ptxf*ATPptxf*D3_ptxf + H2_ptxf*Q2_ptxf - (3*k5_ptxf + H3_ptxf)*D4_ptxf
dC1_ptxf_dt = H1_ptxf*D1_ptxf + k1_ptxf*G_ptxf*C2_ptxf + L1_ptxf*C4_ptxf + H4_ptxf*N_ptxf - 3*k2_ptxf*ATPptxf*F_ptxf*C1_ptxf
dC2_ptxf_dt = 3*k2_ptxf*ATPptxf*F_ptxf*C1_ptxf + 2*k3_ptxf*G_ptxf*Q1_ptxf - (k1_ptxf*G_ptxf + 2*k4_ptxf*ATPptxf*F_ptxf + H2_ptxf)*C2_ptxf
dC3_ptxf_dt = 3*k2_ptxf*ATPptxf*F_ptxf*C4_ptxf + 2*k1_ptxf*G_ptxf*Q4_ptxf - (k1_ptxf*G_ptxf + 2*k2_ptxf*ATPptxf*F_ptxf)*C3_ptxf
dC4_ptxf_dt = k1_ptxf*G_ptxf*C3_ptxf - (L1_ptxf + 3*k2_ptxf*ATPptxf*F_ptxf)*C4_ptxf
dQ1_ptxf_dt = 2*k4_ptxf*ATPptxf*F_ptxf*C2_ptxf + 3*k5_ptxf*G_ptxf*Q2_ptxf - (2*k3_ptxf*G_ptxf + k6_ptxf*ATPptxf*F_ptxf + H2_ptxf)*Q1_ptxf
dQ2_ptxf_dt = k6_ptxf*ATPptxf*F_ptxf*Q1_ptxf + L2_ptxf*Q3_ptxf - (3*k5_ptxf*G_ptxf + L3_ptxf*(1-G_ptxf) + H2_ptxf)*Q2_ptxf
dQ3_ptxf_dt = k2_ptxf*ATPptxf*F_ptxf*Q4_ptxf + L3_ptxf*(1-G_ptxf)*Q2_ptxf - (3*k1_ptxf*G_ptxf + L2_ptxf)*Q3_ptxf
dQ4_ptxf_dt = 2*k2_ptxf*ATPptxf*F_ptxf*C3_ptxf + 3*k1_ptxf*G_ptxf*Q3_ptxf - (2*k1_ptxf*G_ptxf + k2_ptxf*ATPptxf*F_ptxf)*Q4_ptxf
dN_ptxf_dt = H3_ptxf*D4_ptxf - H4_ptxf*N_ptxf

expressions("MSMp2x7")

L3_ptxs = Conditional(Ge(stim_amplitude,500),0.51e-3,0.051e-3)
H1_ptxs = Conditional(Ge(stim_amplitude,500),2.437e-3,0.001e-3)
H2_ptxs = Conditional(Ge(stim_amplitude,500),0.00001e-3,0.00081e-3)
H4_ptxs = Conditional(Ge(stim_amplitude,500),0.001e-3,0)

dD1_ptxs_dt = k1_ptxs*D2_ptxs - (3*k2_ptxs*ATPptxs + H1_ptxs)*D1_ptxs #
dD2_ptxs_dt = 3*k2_ptxs*ATPptxs*D1_ptxs + 2*k3_ptxs*D3_ptxs + H2_ptxs*C2_ptxs - (k1_ptxs + 2*k4_ptxs*ATPptxs + H4_ptxs)*D2_ptxs #
dD3_ptxs_dt = 2*k4_ptxs*ATPptxs*D2_ptxs + 3*k5_ptxs*D4_ptxs + H3_ptxs*Q1_ptxs - (2*k3_ptxs + k6_ptxs*ATPptxs)*D3_ptxs #
dD4_ptxs_dt = k6_ptxs*ATPptxs*D3_ptxs + H2_ptxs*Q2_ptxs - 3*k5_ptxs*D4_ptxs #
dC1_ptxs_dt = H1_ptxs*D1_ptxs + k1_ptxs*C2_ptxs + L1_ptxs*C4_ptxs - 3*k2_ptxs*ATPptxs*C1_ptxs #
dC2_ptxs_dt = H4_ptxs*D2_ptxs + 3*k2_ptxs*ATPptxs*C1_ptxs + 2*k3_ptxs*Q1_ptxs - (k1_ptxs + 2*k4_ptxs*ATPptxs + H2_ptxs)*C2_ptxs #
dC3_ptxs_dt = 3*k2_ptxs*ATPptxs*C4_ptxs + 2*k1_ptxs*Q4_ptxs - (k1_ptxs + 2*k2_ptxs*ATPptxs)*C3_ptxs #
dC4_ptxs_dt = k1_ptxs*C3_ptxs - (L1_ptxs + 3*k2_ptxs*ATPptxs)*C4_ptxs #
dQ1_ptxs_dt = 2*k4_ptxs*ATPptxs*C2_ptxs + 3*k5_ptxs*Q2_ptxs - (2*k3_ptxs + k6_ptxs*ATPptxs + H3_ptxs)*Q1_ptxs #
dQ2_ptxs_dt = k6_ptxs*ATPptxs*Q1_ptxs + L2_ptxs*Q3_ptxs - (3*k5_ptxs + L3_ptxs + H2_ptxs)*Q2_ptxs #
dQ3_ptxs_dt = k2_ptxs*ATPptxs*Q4_ptxs + L3_ptxs*Q2_ptxs - (3*k1_ptxs + L2_ptxs)*Q3_ptxs #
dQ4_ptxs_dt = 2*k2_ptxs*ATPptxs*C3_ptxs + 3*k1_ptxs*Q3_ptxs - (2*k1_ptxs + k2_ptxs*ATPptxs)*Q4_ptxs #

expressions("Ip2x4")
I_ptxf = (G12_ptxf*(Q1_ptxf + Q2_ptxf)*(V_ptxf - E12_ptxf) + G34_ptxf*(Q3_ptxf + Q4_ptxf)*(V_ptxf - E34_ptxf))*10**6 # in [uC/ms]

expressions("Ip2x7")
I_ptxs = (G12_ptxs*(Q1_ptxs + Q2_ptxs)*(V_ptxs - E12_ptxs) + G34_ptxs*(Q3_ptxs + Q4_ptxs)*(V_ptxs - E34_ptxs))*10**6 # in [uC/ms]

expressions("Jp2x")
AHEK = 4*3.141592654*(rHEK)**2 # surface area of HEK293 cell in [sq. meter]
AMiG = 4*3.141592654*(rMiG)**2 # surface area of microglia in [sq. meter]
VHEK = 1000*(4/3)*3.141592654*(rHEK)**3 # volume of HEK293 cell in [L]
VMiG = 1000*(4/3)*3.141592654*(rMiG)**3 # volume of microglia in [L]
VcytHEK = VHEK*0.65 # [L] The volume of cytoplasm in HEK293 cells -> This fraction was taken from Shannon-Bers paper
VcytMiG = VMiG*0.40 # [L] The volume of cytoplasm in microglia -> This fraction was estimated from the figure (Liaury).
VERMiG = VMiG*0.035 # [L] The volume of ER lumen in microglia -> This fraction was taken from Shannon-Bers paper
#CHEK = 12*(10**9)*AHEK
J_ptxf = -(I_ptxf/VcytMiG)*(AMiG/AHEK)/(2*F)*expF_ptxf*SAptxf # [umol/(L*ms) = uM/ms] 12 pF from Microglia and it wad divided by 12*10**9 pF/m^2 * A_HEK
J_ptxs = -(I_ptxs/VcytMiG)*(AMiG/AHEK)/(2*F)*expF_ptxs*SAptxs # [umol/(L*ms) = uM/ms] 12 pF from Microglia and it wad divided by 12*10**9 pF/m^2 * A_HEK

expressions("Buffer_cyto")
CaM = CaMt*SAcm - (Ca2_CaM + Ca4_CaM + CaMCN)
Ca2_CN = CNt - (Ca4_CN + CaMCN) 
#CNt*SAcn - (Ca4_CN + CaMCN)
dCa2_CaM = kab*CaM*(Cai**2) - kba*Ca2_CaM + kcb*Ca4_CaM - kbc*Ca2_CaM*(Cai**2)
dCa2_CaM_dt = dCa2_CaM
dCa4_CaM = kbc*(Cai**2)*Ca2_CaM - kcb*Ca4_CaM + koffA*CaMCN - konA*Ca4_CaM*Ca4_CN
dCa4_CaM_dt = dCa4_CaM
dCa4_CN = konB*(Cai**2)*Ca2_CN*SAcn - koffB*Ca4_CN + koffA*CaMCN - konA*Ca4_CaM*Ca4_CN
dCa4_CN_dt = dCa4_CN
dCaMCN = konA*Ca4_CaM*Ca4_CN - koffA*CaMCN
dCaF = KonFura*Cai*(BmFura - CaF) - KoffFura*CaF
dCaF_dt = dCaF
dCaMCN_dt = dCaMCN

expressions("Buffer_ER")
dCaS = KonCals*CaER*(BmCals/rV_ER - CaS) - KoffCals*CaS
dCaS_dt = dCaS

expressions("NCX")
nNae_NCX = Nae_NCX*SAnancx
QNCX = Q10NCX**((T_NCX-310)/10)
#Cm = uniC_NCX*AMiG      # [F] total conductance of microglia
Ka = 1/(1+(KdAct_NCX/Cai)**nHillncx)
Z = (Vncx*Fncx)/(R*T_NCX)      # [J/C*C/mol]/[J/(mol-K)*K]
delta = (Nai_NCX**HNa_NCX)*Cae_NCX
sigma = (nNae_NCX**HNa_NCX)*Cai
top_NCX = Ka*QNCX*VmaxNCX*(exp(eta_NCX*Z)*delta - exp((eta_NCX-1)*Z)*sigma)
bot_NCX = (KmCai_NCX*(nNae_NCX**HNa_NCX)*(1+(Nai_NCX/KmNai_NCX)**HNa_NCX) + (KmNao_NCX**HNa_NCX)*Cai*(1+(Cai/KmCai_NCX)) + KmCao_NCX*(Nai_NCX**HNa_NCX) + delta + sigma)*(1 + ksat_NCX*exp((eta_NCX-1))*Z)
## Current and influx via NCX
INCX = top_NCX/bot_NCX            # [A/F]
JNCX = (INCX*Cm)/(VMiG*F)*1e03 # [uM/ms]
dNCX_dt = 0

expressions("SERCA_ER")
nVmaxSERCA = VmaxSERCA*SAserca
rV_SERCA = 0.035/0.4        # Volume ratio of ER to Cytosol
QERCa = Q10ERCa**((T_SERCA-310)/10)
top_SERCA = ((Cai/Kmf_SERCA)**H_SERCA) - ((CaER/Kmr_SERCA)**H_SERCA)
bottom_SERCA = 1 + ((Cai/Kmf_SERCA)**H_SERCA) + ((CaER/Kmr_SERCA)**H_SERCA)
JERtoCyt = QERCa*nVmaxSERCA*top_SERCA/bottom_SERCA
JCyttoER = JERtoCyt*rV_SERCA # uM/ms
dSERCA_dt = 0

expressions("p-p38")
p38 = pp38t*SApp38 - pp38
dpp38_dt = -kb_pp38*pp38 + kf_pp38*p38*Cai


expressions("NFAT")
CaMCN_NFAT = CaMCN*(1e3)                # in [nM]
CNt_NFAT = CNt*(1e3) 
actN_NFAT = CaMCN_NFAT/CNt_NFAT
NFATNc = NFATt*SAnfat - NFATpc - NFATpn - NFATNn
J1_NFAT = kf1_NFAT*NFATpc*CaMCN_NFAT - kr1_NFAT*NFATNc*(1 - actN_NFAT)
J2_NFAT = NFATNc*kf2_NFAT
J3_NFAT = kf3_NFAT*NFATNn*(1-actN_NFAT) - kr3_NFAT*NFATpn*CaMCN_NFAT
J4_NFAT = NFATpn*kf4_NFAT
dNFATpc_dt = J4_NFAT/Ccn_NFAT - J1_NFAT     # in [nM/ms]
#dNFATNc_dt = J1_NFAT - J2_NFAT              # in [nM/ms]
dNFATNn_dt = J2_NFAT*Ccn_NFAT - J3_NFAT     # in [nM/ms]
dNFATpn_dt = J3_NFAT - J4_NFAT              # in [nM/ms]

expressions("TNFa")
Rtranscript_TNF = ktrnscrpt_TNF*NFATNn*DNA_TNF
Rtranslate_TNF = ktrnsl_TNF*mRNA_TNF

RdegTNF_TNF = kdegTNF_TNF*TNFa
RdegRNA_TNF = kdegRNA_TNF*mRNA_TNF*(1-1/(1+(IC50pp38_TNF/pp38)**npp38_TNF))

Rgeneexp_TNF = kgeneexpf_TNF*DNA_TNF*TNFa - kgeneexpr_TNF*DNATNF # DNATNF is the complex of DNA and TNF
Rexo_TNF = (kmaxexo_TNF/(1+(IC50Caleak_TNF/Cai)**nCaleak_TNF))*TNFa #*Cai_TNF

dDNA_TNF_dt = -Rgeneexp_TNF
dmRNA_TNF_dt = Rtranscript_TNF - RdegRNA_TNF #- Rtranslate_TNF
dDNATNF_dt = Rgeneexp_TNF
dTNFa_dt = Rtranslate_TNF - RdegTNF_TNF - Rgeneexp_TNF - Rexo_TNF
dTNFa_release_dt = Rexo_TNF


expressions("Leakage")
dCaExtoCy = DExtoCy*(CaExt - Cai)
dCaExtoCy_dt = dCaExtoCy
dCaERtoCy = DERtoCy*(CaER - Cai)
dCaERtoCy_dt = dCaERtoCy

expressions("Ca_ER")
dCaER_dt = JERtoCyt - dCaS - dCaERtoCy

expressions("Ca_cyto")
dCai_dt = (J_ptxf + J_ptxs + dCaExtoCy)*SAca - JCyttoER + JNCX - dCa2_CaM - dCa4_CaM - dCa4_CN - dCaF + dCaERtoCy 
dCaptxs_dt = J_ptxs
dCaptxf_dt = J_ptxf
